PsychoPy2experiment version="2024.2.4"
Settings
  Completed URL = https://connect.cloudresearch.com/participant/project/EB85DB0832/complete
  End Message = Please click 'Ok' to verify completion on CloudResearch.
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'assignment': '001', 'project': '001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/experimentType.xlsx', 'resources/GV.png', 'resources/pracConditions_4.xlsx', 'resources/RH.png', 'resources/RV.png', 'resources/trialConditions_48.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = CogFluxCloud
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine RG_colorblind
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    CodeComponent exclude_2
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        opposite = [-1,1]
      Begin JS Experiment:
        opposite = [(- 1), 1];
      Begin JS Routine:
        util.shuffle(opposite);

        var GV_xPos, RV_xPos;
        GV_xPos = (opposite[0] * 100);
        RV_xPos = (opposite[1] * 100);

        var jitter_1, jitter_2, jitter_3, jitter_4;

        jitter_1 = Math.floor(Math.random() * 45) - 45;;
        jitter_2 = Math.floor(Math.random() * 45) - 45;;
        jitter_3 = Math.floor(Math.random() * 45) - 45;;
        jitter_4 = Math.floor(Math.random() * 45) - 45;;
      Begin Routine:
        import random
        shuffle (opposite)
        GV_xPos = opposite[0]*100
        RV_xPos = opposite[1]*100

        jitter_1 = random.randint(-45, 45)
        jitter_2 = random.randint(-45, 45)
        jitter_3 = random.randint(-45, 45)
        jitter_4 = random.randint(-45, 45)
    ImageComponent green
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = 1
      pos [set every repeat] = [GV_xPos + jitter_1, jitter_2]
      size = [25, 100]
      startVal [time (s)] = 1
      units = pix
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    ImageComponent red
      color = .8, .8, .8
      image = resources/RV.png
      opacity [set every repeat] = 1
      pos [set every repeat] = [RV_xPos + jitter_3, jitter_4]
      size = [25, 100]
      startVal [time (s)] = 1
      units = pix
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    MouseComponent mouse
      clickable = green, red
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
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    CodeComponent showMouse_2
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
  Routine Rest
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    CodeComponent exclude_6
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if exp_loop.thisN == 1:
            continueRoutine = False
    TextComponent RestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        30 Second Rest

        Remember to find the red vertical rectangle.
  Routine Thanks
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    CodeComponent exclude_16
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    TextComponent ThanksText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank you for your participation.

        You will be redirected to CloudResearch...
    CodeComponent showMouse_5
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
  Routine Practice
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  Routine fix
    RoutineSettingsComponent fix
      saveStartStop = False
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    TextComponent fixationx
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine assertText
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    TextComponent assert_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = This is only used for debugging
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  Routine instructTrial
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    CodeComponent exclude_3
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    TextComponent text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.023
      startVal [time (s)] = 0
      wrapWidth = 1.1
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      text:
        In the following task you will be presented with arrays of various colored rectangles (green and red).

        Your task is to search for a red vertical rectangle.

        Press the [P] key if the red vertical rectangle is PRESENT
        and the [A] key if the red vertical rectangle is ABSENT.

        Please respond as quickly as possible, while minimizing errors.

        Press the [spacebar] when you are ready to begin.
    KeyboardComponent Start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    CodeComponent hide_mouse_2
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = True
  Routine instructColor
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    CodeComponent exclude
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_14
      clickable = confirmSign_button_10
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_14
      letterHeight = 0.023
      pos = (0, -0.25)
      startVal [time (s)] = 2
      text = Click here to continue.
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    TextComponent text_4
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.023
      startVal [time (s)] = 0
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      text:
        After you click the continue button,
        a green vertical rectangle and a red vertical rectangle will appear.

        Click on the red vertical rectangle.
  Routine hard_trial
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    CodeComponent underage_exclude_6
      Code Type = Both
      Begin JS Routine:
        if (age.rating == "Under 18 years old") {
            continueRoutine = false;
        }
      Begin Routine:
        if age.rating == 1:
            continueRoutine = False
    CodeComponent modeHard
      Code Type = Both
      Begin JS Routine:
        if ((trialver === 0)) {
            continueRoutine = false;
        }
      Begin Routine:
        if trialver == 0:
            continueRoutine = False
    TextComponent fixation_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent randomize_position
      Code Type = Both
      Begin JS Routine:
        var x_pos_Top, x_pos_Mid, x_pos_Bot, y_pos_fix;

        x_pos_Top = [(- 450), (- 150), 150, 450];
        x_pos_Mid = [(- 450), (- 150), 150, 450];
        x_pos_Bot = [(- 450), (- 150), 150, 450];
        y_pos_fix = [(- 300), 0, 300];

        if ((setSize === 6)) {
            x_pos_Top = [(- 150), 150];
            x_pos_Mid = [(- 150), 150];
            x_pos_Bot = [(- 150), 150];
            util.shuffle(x_pos_Top);
            util.shuffle(x_pos_Mid);
            util.shuffle(x_pos_Bot);
            for (var x, _pj_c = 0, _pj_a = util.range(2), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                x = _pj_a[_pj_c];
                x_pos_Top.push(0);
                x_pos_Mid.push(0);
                x_pos_Bot.push(0);
            }
        } else {
            x_pos_Top = [(- 450), (- 150), 150, 450];
            x_pos_Mid = [(- 450), (- 150), 150, 450];
            x_pos_Bot = [(- 450), (- 150), 150, 450];
            util.shuffle(x_pos_Top);
            util.shuffle(x_pos_Mid);
            util.shuffle(x_pos_Bot);
        }

        var jitter_1, jitter_2, jitter_3, jitter_4, jitter_5, jitter_6, jitter_7, jitter_8, jitter_9, jitter_10, jitter_11, jitter_12;
        var jitter_13, jitter_14, jitter_15, jitter_16, jitter_17, jitter_18, jitter_19, jitter_20, jitter_21, jitter_22, jitter_23, jitter_24;
        jitter_1 = Math.floor(Math.random() * 45) - 45;
        jitter_2 = Math.floor(Math.random() * 45) - 45;
        jitter_3 = Math.floor(Math.random() * 45) - 45;
        jitter_4 = Math.floor(Math.random() * 45) - 45;
        jitter_5 = Math.floor(Math.random() * 45) - 45;
        jitter_6 = Math.floor(Math.random() * 45) - 45;
        jitter_7 = Math.floor(Math.random() * 45) - 45;
        jitter_8 = Math.floor(Math.random() * 45) - 45;
        jitter_9 = Math.floor(Math.random() * 45) - 45;
        jitter_10 = Math.floor(Math.random() * 45) - 45;
        jitter_11 = Math.floor(Math.random() * 45) - 45;
        jitter_12 = Math.floor(Math.random() * 45) - 45;
        jitter_13 = Math.floor(Math.random() * 45) - 45;
        jitter_14 = Math.floor(Math.random() * 45) - 45;
        jitter_15 = Math.floor(Math.random() * 45) - 45;
        jitter_16 = Math.floor(Math.random() * 45) - 45;
        jitter_17 = Math.floor(Math.random() * 45) - 45;
        jitter_18 = Math.floor(Math.random() * 45) - 45;
        jitter_19 = Math.floor(Math.random() * 45) - 45;
        jitter_20 = Math.floor(Math.random() * 45) - 45;
        jitter_21 = Math.floor(Math.random() * 45) - 45;
        jitter_22 = Math.floor(Math.random() * 45) - 45;
        jitter_23 = Math.floor(Math.random() * 45) - 45;
        jitter_24 = Math.floor(Math.random() * 45) - 45;
      Begin Routine:
        #define array for stimuli:
        x_pos_Top = [-450, -150, 150, 450]
        x_pos_Mid = [-450, -150, 150, 450]
        x_pos_Bot = [-450, -150, 150, 450]
        y_pos_fix = [-300, 0, 300]

        #randomize stimulus position
        if setSize == 6:
            x_pos_Top = [-150, 150]
            x_pos_Mid = [-150, 150]
            x_pos_Bot = [-150, 150]
            shuffle (x_pos_Top)
            shuffle (x_pos_Mid)
            shuffle (x_pos_Bot)
            for x in range(2):
                x_pos_Top.append(0)
                x_pos_Mid.append(0)
                x_pos_Bot.append(0)
        else:
            x_pos_Top = [-450, -150, 150, 450]
            x_pos_Mid = [-450, -150, 150, 450]
            x_pos_Bot = [-450, -150, 150, 450]
            shuffle (x_pos_Top)
            shuffle (x_pos_Mid)
            shuffle (x_pos_Bot)

        jitter_1 = random.randint(-45, 45)
        jitter_2 = random.randint(-45, 45)
        jitter_3 = random.randint(-45, 45)
        jitter_4 = random.randint(-45, 45)
        jitter_5 = random.randint(-45, 45)
        jitter_6 = random.randint(-45, 45)
        jitter_7 = random.randint(-45, 45)
        jitter_8 = random.randint(-45, 45)
        jitter_9 = random.randint(-45, 45)
        jitter_10 = random.randint(-45, 45)
        jitter_11 = random.randint(-45, 45)
        jitter_12 = random.randint(-45, 45)
        jitter_13 = random.randint(-45, 45)
        jitter_14 = random.randint(-45, 45)
        jitter_15 = random.randint(-45, 45)
        jitter_16 = random.randint(-45, 45)
        jitter_17 = random.randint(-45, 45)
        jitter_18 = random.randint(-45, 45)
        jitter_19 = random.randint(-45, 45)
        jitter_20 = random.randint(-45, 45)
        jitter_21 = random.randint(-45, 45)
        jitter_22 = random.randint(-45, 45)
        jitter_23 = random.randint(-45, 45)
        jitter_24 = random.randint(-45, 45)
    CodeComponent position_vars
      Code Type = Both
      Begin JS Routine:
        var dist1_pos, dist2_pos, dist3_pos, dist4_pos, dist5_pos, dist6_pos, dist7_pos, dist8_pos, dist9_pos, dist10_pos, dist11_pos, dist12_pos;

        var y_pos_fix;
        y_pos_fix = [(- 300), 0, 300];

        dist1_pos = [(x_pos_Top[0] + jitter_1), (y_pos_fix[2] + jitter_2)];
        dist2_pos = [(x_pos_Mid[0] + jitter_3), (y_pos_fix[1] + jitter_4)];
        dist3_pos = [(x_pos_Bot[0] + jitter_5), (y_pos_fix[0] + jitter_6)];
        dist4_pos = [(x_pos_Top[1] + jitter_7), (y_pos_fix[2] + jitter_8)];
        dist5_pos = [(x_pos_Mid[1] + jitter_9), (y_pos_fix[1] + jitter_10)];
        dist6_pos = [(x_pos_Bot[1] + jitter_11), (y_pos_fix[0] + jitter_12)];
        dist7_pos = [(x_pos_Top[2] + jitter_13), (y_pos_fix[2] + jitter_14)];
        dist8_pos = [(x_pos_Mid[2] + jitter_15), (y_pos_fix[1] + jitter_16)];
        dist9_pos = [(x_pos_Bot[2] + jitter_17), (y_pos_fix[0] + jitter_18)];
        dist10_pos = [(x_pos_Top[3] + jitter_19), (y_pos_fix[2] + jitter_20)];
        dist11_pos = [(x_pos_Mid[3] + jitter_21), (y_pos_fix[1] + jitter_22)];
        dist12_pos = [(x_pos_Bot[3] + jitter_23), (y_pos_fix[0] + jitter_24)];

        var O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos, O_dist7_pos, O_dist8_pos, O_dist9_pos, O_dist10_pos, O_dist11_pos, O_dist12_pos, O_target_pos;
        O_dist1_pos = [x_pos_Top[0], y_pos_fix[2]];
        O_dist2_pos = [x_pos_Mid[0], y_pos_fix[1]];
        O_dist3_pos = [x_pos_Bot[0], y_pos_fix[0]];
        O_dist4_pos = [x_pos_Top[1], y_pos_fix[2]];
        O_dist5_pos = [x_pos_Mid[1], y_pos_fix[1]];
        O_dist6_pos = [x_pos_Bot[1], y_pos_fix[0]];
        O_dist7_pos = [x_pos_Top[2], y_pos_fix[2]];
        O_dist8_pos = [x_pos_Mid[2], y_pos_fix[1]];
        O_dist9_pos = [x_pos_Bot[2], y_pos_fix[0]];
        O_dist10_pos = [x_pos_Top[3], y_pos_fix[2]];
        O_dist11_pos = [x_pos_Mid[3], y_pos_fix[1]];
        O_dist12_pos = [x_pos_Bot[3], y_pos_fix[0]];
        O_target_pos = [targetPos_X, targetPos_Y];
      Begin Routine:
        dist1_pos = [x_pos_Top[0] + jitter_1, y_pos_fix[2] + jitter_2]
        dist2_pos = [x_pos_Mid[0] + jitter_3, y_pos_fix[1] + jitter_4]
        dist3_pos = [x_pos_Bot[0] + jitter_5, y_pos_fix[0] + jitter_6]
        dist4_pos = [x_pos_Top[1] + jitter_7, y_pos_fix[2] + jitter_8]
        dist5_pos = [x_pos_Mid[1] + jitter_9, y_pos_fix[1] + jitter_10]
        dist6_pos = [x_pos_Bot[1] + jitter_11, y_pos_fix[0] + jitter_12]
        dist7_pos = [x_pos_Top[2] + jitter_13, y_pos_fix[2] + jitter_14]
        dist8_pos = [x_pos_Mid[2] + jitter_15, y_pos_fix[1] + jitter_16]
        dist9_pos = [x_pos_Bot[2] + jitter_17, y_pos_fix[0] + jitter_18]
        dist10_pos = [x_pos_Top[3] + jitter_19, y_pos_fix[2] + jitter_20]
        dist11_pos = [x_pos_Mid[3] + jitter_21, y_pos_fix[1] + jitter_22]
        dist12_pos = [x_pos_Bot[3] + jitter_23, y_pos_fix[0] + jitter_24]

        #position, no jitter
        O_dist1_pos = [x_pos_Top[0], y_pos_fix[2]]
        O_dist2_pos = [x_pos_Mid[0], y_pos_fix[1]]
        O_dist3_pos = [x_pos_Bot[0], y_pos_fix[0]]
        O_dist4_pos = [x_pos_Top[1], y_pos_fix[2]]
        O_dist5_pos = [x_pos_Mid[1], y_pos_fix[1]]
        O_dist6_pos = [x_pos_Bot[1], y_pos_fix[0]]
        O_dist7_pos = [x_pos_Top[2], y_pos_fix[2]]
        O_dist8_pos = [x_pos_Mid[2], y_pos_fix[1]]
        O_dist9_pos = [x_pos_Bot[2], y_pos_fix[0]]
        O_dist10_pos = [x_pos_Top[3], y_pos_fix[2]]
        O_dist11_pos = [x_pos_Mid[3], y_pos_fix[1]]
        O_dist12_pos = [x_pos_Bot[3], y_pos_fix[0]]
        O_target_pos = [targetPos_X,targetPos_Y]
    ImageComponent targetRV
      color = .8, .8, .8
      image = resources/RV.png
      opacity [set every repeat] = targetopacity
      pos [set every repeat] = [0, 0]
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist1img
      color = .8, .8, .8
      image = resources/RH.png
      opacity [set every repeat] = opacity_1
      pos [set every repeat] = dist1_pos
      size = [100, 25]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist2img
      color = .8, .8, .8
      image = resources/RH.png
      opacity [set every repeat] = opacity_2
      pos [set every repeat] = dist2_pos
      size = [100, 25]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist3img
      color = .8, .8, .8
      image = resources/RH.png
      opacity [set every repeat] = opacity_3
      pos [set every repeat] = dist3_pos
      size = [100, 25]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist4img
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_4
      pos [set every repeat] = dist4_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist5img
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_5
      pos [set every repeat] = dist5_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist6img
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_6
      pos [set every repeat] = dist6_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist7img
      color = .8, .8, .8
      image = resources/RH.png
      opacity [set every repeat] = opacity_7
      pos [set every repeat] = dist7_pos
      size = [100, 25]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist8img
      color = .8, .8, .8
      image = resources/RH.png
      opacity [set every repeat] = opacity_8
      pos [set every repeat] = dist8_pos
      size = [100, 25]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist9img
      color = .8, .8, .8
      image = resources/RH.png
      opacity [set every repeat] = opacity_9
      pos [set every repeat] = dist9_pos
      size = [100, 25]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist10img
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_10
      pos [set every repeat] = dist10_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist11img
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_11
      pos [set every repeat] = dist11_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist12img
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_12
      pos [set every repeat] = dist12_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    CodeComponent replace
      Code Type = Both
      Begin JS Routine:
        var distractors, dists_pos, dists_pos_jit, target_present, target_opacity;

        distractors = [dist1img, dist2img, dist3img, dist4img, dist5img, dist6img, dist7img, dist8img, dist9img, dist10img, dist11img, dist12img];
        dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos, O_dist7_pos, O_dist8_pos, O_dist9_pos, O_dist10_pos, O_dist11_pos, O_dist12_pos];
        dists_pos_jit = [dist1_pos, dist2_pos, dist3_pos, dist4_pos, dist5_pos, dist6_pos, dist7_pos, dist8_pos, dist9_pos, dist10_pos, dist11_pos, dist12_pos];
        if (setSize == 6) {
            distractors = [dist1img, dist2img, dist3img, dist4img, dist5img, dist6img];
            dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos];
            dists_pos_jit = [dist1_pos, dist2_pos, dist3_pos, dist4_pos, dist5_pos, dist6_pos]
        }

        target_opacity = targetopacity
        target_present = false;
        if (target_opacity == 1) {
            target_present = true;
        }

        if (target_present) {
            for (let i = 0; i < dists_pos.length; i++) {
                if (dists_pos[i][0] == O_target_pos[0] && dists_pos[i][1] == O_target_pos[1]) {
                    distractors[i].setOpacity(0.0);
                    targetRV.setPos(dists_pos_jit[i]);
                    break;
                }
            }
        }
      Begin Routine:
        # Remove the distractor for trials where target is present
        distractors = [dist1img, dist2img, dist3img, dist4img, dist5img, dist6img, dist7img, dist8img, dist9img, dist10img, dist11img, dist12img]
        dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos, O_dist7_pos, O_dist8_pos, O_dist9_pos, O_dist10_pos, O_dist11_pos, O_dist12_pos]

        if setSize == 6:
            distractors = [dist1img, dist2img, dist3img, dist4img, dist5img, dist6img]
            dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos]

        target_opacity = targetopacity
        target_present = (target_opacity == 1)

        # Only for trials where the target is present is one distractor removed.
        if target_present:
            for idx in range(len(dists_pos)):
                if dists_pos[idx] == O_target_pos:
                    distractors[idx].opacity = 0
                    targetRV.pos = distractors[idx].pos
                    break
    KeyboardComponent Response
      allowedKeys = 'p','a'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine easy_trial
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    CodeComponent underage_exclude_5
      Code Type = Both
      Begin JS Routine:
        if (age.rating == "Under 18 years old") {
            continueRoutine = false;
        }
      Begin Routine:
        if age.rating == 1:
            continueRoutine = False
    CodeComponent modeEasy
      Code Type = Both
      Begin JS Routine:
        if ((trialver === 1)) {
            continueRoutine = false;
        }
      Begin Routine:
        if trialver == 1:
            continueRoutine = False
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent randomize_position_E
      Code Type = Both
      Begin JS Routine:
        var x_pos_Top, x_pos_Mid, x_pos_Bot, y_pos_fix;
        x_pos_Top = [(- 450), (- 150), 150, 450];
        x_pos_Mid = [(- 450), (- 150), 150, 450];
        x_pos_Bot = [(- 450), (- 150), 150, 450];
        y_pos_fix = [(- 300), 0, 300];

        if ((setSize === 6)) {
            x_pos_Top = [(- 150), 150];
            x_pos_Mid = [(- 150), 150];
            x_pos_Bot = [(- 150), 150];
            util.shuffle(x_pos_Top);
            util.shuffle(x_pos_Mid);
            util.shuffle(x_pos_Bot);
            for (var x, _pj_c = 0, _pj_a = util.range(2), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                x = _pj_a[_pj_c];
                x_pos_Top.push(0);
                x_pos_Mid.push(0);
                x_pos_Bot.push(0);
            }
        } else {
            x_pos_Top = [(- 450), (- 150), 150, 450];
            x_pos_Mid = [(- 450), (- 150), 150, 450];
            x_pos_Bot = [(- 450), (- 150), 150, 450];
            util.shuffle(x_pos_Top);
            util.shuffle(x_pos_Mid);
            util.shuffle(x_pos_Bot);
        }

        var jitter_1, jitter_2, jitter_3, jitter_4, jitter_5, jitter_6, jitter_7, jitter_8, jitter_9, jitter_10, jitter_11, jitter_12;
        var jitter_13, jitter_14, jitter_15, jitter_16, jitter_17, jitter_18, jitter_19, jitter_20, jitter_21, jitter_22, jitter_23, jitter_24;
        jitter_1 = Math.floor(Math.random() * 45) - 45;
        jitter_2 = Math.floor(Math.random() * 45) - 45;
        jitter_3 = Math.floor(Math.random() * 45) - 45;
        jitter_4 = Math.floor(Math.random() * 45) - 45;
        jitter_5 = Math.floor(Math.random() * 45) - 45;
        jitter_6 = Math.floor(Math.random() * 45) - 45;
        jitter_7 = Math.floor(Math.random() * 45) - 45;
        jitter_8 = Math.floor(Math.random() * 45) - 45;
        jitter_9 = Math.floor(Math.random() * 45) - 45;
        jitter_10 = Math.floor(Math.random() * 45) - 45;
        jitter_11 = Math.floor(Math.random() * 45) - 45;
        jitter_12 = Math.floor(Math.random() * 45) - 45;
        jitter_13 = Math.floor(Math.random() * 45) - 45;
        jitter_14 = Math.floor(Math.random() * 45) - 45;
        jitter_15 = Math.floor(Math.random() * 45) - 45;
        jitter_16 = Math.floor(Math.random() * 45) - 45;
        jitter_17 = Math.floor(Math.random() * 45) - 45;
        jitter_18 = Math.floor(Math.random() * 45) - 45;
        jitter_19 = Math.floor(Math.random() * 45) - 45;
        jitter_20 = Math.floor(Math.random() * 45) - 45;
        jitter_21 = Math.floor(Math.random() * 45) - 45;
        jitter_22 = Math.floor(Math.random() * 45) - 45;
        jitter_23 = Math.floor(Math.random() * 45) - 45;
        jitter_24 = Math.floor(Math.random() * 45) - 45;
      Begin Routine:
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    CodeComponent position_vars_E
      Code Type = Both
      Begin JS Routine:
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      Begin Routine:
        dist1_pos = [x_pos_Top[0] + jitter_1, y_pos_fix[2] + jitter_2]
        dist2_pos = [x_pos_Mid[0] + jitter_3, y_pos_fix[1] + jitter_4]
        dist3_pos = [x_pos_Bot[0] + jitter_5, y_pos_fix[0] + jitter_6]
        dist4_pos = [x_pos_Top[1] + jitter_7, y_pos_fix[2] + jitter_8]
        dist5_pos = [x_pos_Mid[1] + jitter_9, y_pos_fix[1] + jitter_10]
        dist6_pos = [x_pos_Bot[1] + jitter_11, y_pos_fix[0] + jitter_12]
        dist7_pos = [x_pos_Top[2] + jitter_13, y_pos_fix[2] + jitter_14]
        dist8_pos = [x_pos_Mid[2] + jitter_15, y_pos_fix[1] + jitter_16]
        dist9_pos = [x_pos_Bot[2] + jitter_17, y_pos_fix[0] + jitter_18]
        dist10_pos = [x_pos_Top[3] + jitter_19, y_pos_fix[2] + jitter_20]
        dist11_pos = [x_pos_Mid[3] + jitter_21, y_pos_fix[1] + jitter_22]
        dist12_pos = [x_pos_Bot[3] + jitter_23, y_pos_fix[0] + jitter_24]

        #position, no jitter
        O_dist1_pos = [x_pos_Top[0], y_pos_fix[2]]
        O_dist2_pos = [x_pos_Mid[0], y_pos_fix[1]]
        O_dist3_pos = [x_pos_Bot[0], y_pos_fix[0]]
        O_dist4_pos = [x_pos_Top[1], y_pos_fix[2]]
        O_dist5_pos = [x_pos_Mid[1], y_pos_fix[1]]
        O_dist6_pos = [x_pos_Bot[1], y_pos_fix[0]]
        O_dist7_pos = [x_pos_Top[2], y_pos_fix[2]]
        O_dist8_pos = [x_pos_Mid[2], y_pos_fix[1]]
        O_dist9_pos = [x_pos_Bot[2], y_pos_fix[0]]
        O_dist10_pos = [x_pos_Top[3], y_pos_fix[2]]
        O_dist11_pos = [x_pos_Mid[3], y_pos_fix[1]]
        O_dist12_pos = [x_pos_Bot[3], y_pos_fix[0]]
        O_target_pos = [targetPos_X,targetPos_Y]
    ImageComponent targetRV_E
      color = .8, .8, .8
      image = resources/RV.png
      opacity [set every repeat] = targetopacity
      pos [set every repeat] = [0, 0]
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist1img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_1
      pos [set every repeat] = dist1_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist2img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_2
      pos [set every repeat] = dist2_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist3img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_3
      pos [set every repeat] = dist3_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist4img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_4
      pos [set every repeat] = dist4_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist5img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_5
      pos [set every repeat] = dist5_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist6img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_6
      pos [set every repeat] = dist6_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist7img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_7
      pos [set every repeat] = dist7_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist8img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_8
      pos [set every repeat] = dist8_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist9img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_9
      pos [set every repeat] = dist9_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist10img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_10
      pos [set every repeat] = dist10_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist11img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_11
      pos [set every repeat] = dist11_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist12img_E
      color = .8, .8, .8
      image = resources/GV.png
      opacity [set every repeat] = opacity_12
      pos [set every repeat] = dist12_pos
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    CodeComponent replace_E
      Code Type = Both
      Begin JS Routine:
        var distractors, dists_pos, dists_pos_jit, target_present, target_opacity;

        distractors = [dist1img_E, dist2img_E, dist3img_E, dist4img_E, dist5img_E, dist6img_E, dist7img_E, dist8img_E, dist9img_E, dist10img_E, dist11img_E, dist12img_E];
        dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos, O_dist7_pos, O_dist8_pos, O_dist9_pos, O_dist10_pos, O_dist11_pos, O_dist12_pos];
        dists_pos_jit = [dist1_pos, dist2_pos, dist3_pos, dist4_pos, dist5_pos, dist6_pos, dist7_pos, dist8_pos, dist9_pos, dist10_pos, dist11_pos, dist12_pos];
        if ((setSize === 6)) {
            distractors = [dist1img_E, dist2img_E, dist3img_E, dist4img_E, dist5img_E, dist6img_E];
            dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos];
            dists_pos_jit = [dist1_pos, dist2_pos, dist3_pos, dist4_pos, dist5_pos, dist6_pos]
        }

        target_opacity = targetopacity
        target_present = false;
        if (target_opacity == 1) {
            target_present = true;
        }

        if (target_present) {
            for (let i = 0; i < dists_pos.length; i++) {
                if (dists_pos[i][0] == O_target_pos[0] && dists_pos[i][1] == O_target_pos[1]) {
                    distractors[i].setOpacity(0.0);
                    targetRV_E.setPos(dists_pos_jit[i]);
                    break;
                }
            }
        }
      Begin Routine:
        # Remove the distractor for trials where target is present
        distractors = [dist1img_E, dist2img_E, dist3img_E, dist4img_E, dist5img_E, dist6img_E, dist7img_E, dist8img_E, dist9img_E, dist10img_E, dist11img_E, dist12img_E]
        dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos, O_dist7_pos, O_dist8_pos, O_dist9_pos, O_dist10_pos, O_dist11_pos, O_dist12_pos]

        if setSize == 6:
            distractors = [dist1img_E, dist2img_E, dist3img_E, dist4img_E, dist5img_E, dist6img_E]
            dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos]

        target_opacity = targetopacity
        target_present = False
        if target_opacity == 1:
            target_present = True

        # Only for trials where the target is present is one distractor removed.
        if target_present:
            for idx in range(len(dists_pos)):
                if dists_pos[idx] == O_target_pos:
                    distractors[idx].opacity = 0
                    targetRV_E.pos = distractors[idx].pos
                    break
    KeyboardComponent Response_E
      allowedKeys = 'p','a'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine easytext
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if trialver == 1:
            continueRoutine = False
    TextComponent assert_easy
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = Easy
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  Routine hardtext
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trialver == 0:
            continueRoutine = False
    TextComponent assert_hard
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = Hard
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  Routine PreMEQ
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    CodeComponent exclude_7
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    TextComponent form
      color = 1,1,1
      letterHeight = 0.023
      startVal [time (s)] = 0
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      text:
        Thank you for completing our tasks.

        Please answer the following questions about yourself.
    TextComponent confirmSign_button_3
      letterHeight = 0.023
      pos = (0, -0.4)
      startVal [time (s)] = 1.5
      text = Click here to continue.
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    MouseComponent confirmSign_click_3
      clickable = confirmSign_button_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    CodeComponent showMouse_3
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
  Routine ITI_1000ms
    RoutineSettingsComponent ITI_1000ms
      saveStartStop = False
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    TextComponent space
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine bestfeel_meq
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    CodeComponent exclude_8
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_4
      clickable = confirmSign_button_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_4
      letterHeight = 0.023
      pos = (0, -0.25)
      startVal [condition] = (best_feel.rating)
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      text:
        Click here to confirm
        [You will not be able to go back]
    TextComponent best_feel_Q
      letterHeight = 0.023
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text = Considering only your own “best feeling” rhythm, at what time would you get up if you were entirely free to plan your day?
      wrapWidth = 1
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    SliderComponent best_feel
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('10:45 AM - 12:00 PM', '9:30 AM - 10:45 AM', '7:45 AM - 9:30 AM', '6:30 AM - 7:45 AM', '5:00 AM - 6:30 AM')
      letterHeight = 18
      pos = (-175, 0)
      size = (30, 250)
      startVal [time (s)] = 0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
      units = pix
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    CodeComponent showMouse_4
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
  Routine wokentired_meq
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    CodeComponent exclude_9
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_6
      clickable = confirmSign_button_6
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_6
      letterHeight = 0.023
      pos = (0, -0.25)
      startVal [condition] = woken_tired.rating
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      text:
        Click here to confirm
        [You will not be able to go back]
    TextComponent woken_tired_Q
      letterHeight = 0.023
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text = After the first half hour after having woken in the morning, how tired do you feel?
      wrapWidth = 1
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    SliderComponent woken_tired
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('Very Refreshed', 'Fairly Refreshed', 'Fairly Tired', 'Very Tired')
      letterHeight = 18
      pos = (-175, 0)
      size = (30, 250)
      startVal [time (s)] = 0
      styles = choice
      ticks = (1, 2, 3, 4)
      units = pix
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  Routine sleepytime_meq
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    CodeComponent exclude_10
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_7
      clickable = confirmSign_button_7
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_7
      letterHeight = 0.023
      pos = (0, -0.25)
      startVal [condition] = sleepy_time.rating
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      text:
        Click here to confirm
        [You will not be able to go back]
    TextComponent sleepy_time_Q
      letterHeight = 0.023
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text = At what time in the evening would you feel tired and as a result in need of sleep?
      wrapWidth = 1
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    SliderComponent sleepy_time
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('1:45 AM - 3:00 AM', '12:30 AM - 1:45 AM', '10:15 PM - 12:30 AM', '9:00 PM - 10:15 PM', '8:00 PM - 9:00 PM')
      letterHeight = 18
      pos = (-175, 0)
      size = (30, 250)
      startVal [time (s)] = 0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
      units = pix
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  Routine bestpeak_meq
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    CodeComponent exclude_11
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_8
      clickable = confirmSign_button_8
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_8
      letterHeight = 0.023
      pos = (0, -0.25)
      startVal [condition] = best_peak.rating
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      text:
        Click here to confirm
        [You will not be able to go back]
    TextComponent best_peak_Q
      letterHeight = 0.023
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text = At what time of the day do you think that you reach your “feeling best” peak?
      wrapWidth = 1
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    SliderComponent best_peak
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('9:30 PM - 4:30 AM', '4:30 PM - 9:30 PM', '9:30 AM - 4:30 PM', '7:30 AM - 9:30 AM', '4:30 AM - 7:30 AM')
      letterHeight = 18
      pos = (-175, 0)
      size = (30, 250)
      startVal [time (s)] = 0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
      units = pix
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  Routine persontype_meq
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    CodeComponent exclude_12
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_9
      clickable = confirmSign_button_9
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_9
      letterHeight = 0.023
      pos = (0, -0.25)
      startVal [condition] = person_type.rating
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      text:
        Click here to confirm
        [You will not be able to go back]
    TextComponent person_type_Q
      letterHeight = 0.023
      pos = (0, 0.22)
      startVal [time (s)] = 0.0
      text = One hears about morning and evening types of people. Which one of these types do you consider yourself to be? 
      wrapWidth = 1
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    SliderComponent person_type
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('Definitely an "evening" type', 'Rather more a "evening" than a "morning" type', 'Rather more a "morning" than an "evening" type', 'Definitely a "morning" type')
      letterHeight = 18
      pos = (-175, 0)
      size = (30, 250)
      startVal [time (s)] = 0
      styles = choice
      ticks = (1, 2, 3, 4)
      units = pix
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  Routine setup
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    CodeComponent imports
      Code Type = Both
      Before Experiment:
        import random
  Routine what_age
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    CodeComponent exclude_13
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_10
      clickable = confirmSign_button_10
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_10
      letterHeight = 0.023
      pos = (0, -0.25)
      startVal [time (s)] = 2
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      text:
        Click here after you have typed your age.
        [You will not be able to go back]
    TextComponent age_fill_Q
      letterHeight = 0.023
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      text = Enter your age in the textbox below.
      wrapWidth = 1
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    TextboxComponent age_Q
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.023
      placeholder = Type your age here...
      pos = (0, -0.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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  Routine gender
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    CodeComponent exclude_14
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_11
      clickable = confirmSign_button_11
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_11
      letterHeight = 0.023
      pos = (0, -0.35)
      startVal [condition] = gender_c.rating
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      text:
        Click here to confirm
        [You will not be able to go back]
    TextComponent gender_Q
      letterHeight = 0.023
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
      text = With which gender do you identify?
      wrapWidth = 1
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    SliderComponent gender_c
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('Other gender (please describe below)', 'Transgender male', 'Transgender female', 'Gender non-binary/genderfluid/genderqueer', 'Cisgender male', 'Cisgender female')
      letterHeight = 18
      pos = (-175, 125)
      size = (30, 300)
      startVal [time (s)] = 0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6)
      units = pix
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    TextboxComponent other_gender_text
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.023
      placeholder = (Please describe gender here if you chose 'another')
      pos = (0, -0.2)
      size = (0.95, 0.2)
      startVal [time (s)] = 0
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    CodeComponent max_char_limit
      Code Type = Auto->JS
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      Each Frame:
        if len(other_gender_text.text) > 500:
             other_gender_text.text = other_gender_text.text[0:500]
    CodeComponent showMouse_6
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
  Routine exclusion
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    CodeComponent exclude_show
      Code Type = Both
      Begin JS Routine:
        if (consent.rating != "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating != 2:
            continueRoutine = False
    TextComponent ThanksText_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sorry, you are not qualified for this experiment.

        Thank you.

        You can press the [ESC] button to leave.
    CodeComponent showMouse_9
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
  Routine feedback
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    CodeComponent exclude_5
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    CodeComponent feedback_display
      Code Type = Both
      Begin JS Routine:
        var correctness, response_time;

        //if (trialver == 0) {
        //    correctness = Response_E.corr;
        //    response_time = Response_E.rt;
        //}
        //else {
        //    correctness = Response.corr;
        //    response_time = Response.rt;
        //}

        correctness = Response_2.corr
        response_time = Response_2.rt

        if (correctness == 1) {
            continueRoutine = false;
        }

        if (response_time == null) {
            fd.setText("Too Slow");
        } else {
            fd.setText("Incorrect");
        }
      Begin Routine:
        correctness = response_time = None

        #if trialver == 0:
        #    correctness = Response_E.corr
        #    response_time = Response_E.rt
        #else:
        #    correctness = Response.corr
        #    response_time = Response.rt

        correctness = Response_2.corr
        response_time = Response_2.rt

        # Check if the response is correct (1 in the data file)
        if correctness == 1:
            # End the routine if response is correct, so feedback is not displayed
            continueRoutine = False

        if isinstance(response_time, list): # response time returns an empty list if user is too slow
            fd.text = "Too Slow"
        else:
            fd.text = "Incorrect"
    TextComponent fd
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = Incorrect
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  Routine race_eth_checkbox
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    CodeComponent underage_exclude_19
      Code Type = Both
      Begin JS Routine:
        if (age.rating == "Under 18 years old") {
            continueRoutine = false;
        }
      Begin Routine:
        if age.rating == 1:
            continueRoutine = False
    CodeComponent showMouse_12
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    MouseComponent confirmSign_click_12
      clickable = confirmSign_button_12
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_12
      letterHeight = 0.023
      pos = (0, -0.4)
      startVal [time (s)] = 0
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      text:
        Click here to confirm
        [You will not be able to go back]
    VariableComponent race_eth_data
      startRoutineValue = []
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    TextComponent race_eth_Q
      letterHeight = 0.023
      pos = (0, 0.37)
      startVal [time (s)] = 0.0
      text = Which best describes your race/ethnicity? (select all that apply)
      wrapWidth = 1
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    PolygonComponent Black
      fillColor = $[1,1,1]
      pos = (-0.2, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent Hispanic
      fillColor = $[1,1,1]
      pos = (-0.2, 0.25)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent Asian
      fillColor = $[1,1,1]
      pos = (-0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent Pacific
      fillColor = $[1,1,1]
      pos = (-0.2, 0.15)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent AmericanIndian
      fillColor = $[1,1,1]
      pos = (-0.2, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent MiddleEastern
      fillColor = $[1,1,1]
      pos = (-0.2, 0.05)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent White
      fillColor = $[1,1,1]
      pos = (-0.2, 0)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent Other
      fillColor = $[1,1,1]
      pos = (-0.2, -0.05)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    CodeComponent turn_checkbox
      Code Type = Both
      Begin JS Routine:
        var checkboxes, clicked;

        checkboxes = [Black, Hispanic, Asian, Pacific, AmericanIndian, MiddleEastern, White, Other];
        clicked = [];
        mouseDown = false;
        for (var box, i = 0; i < checkboxes.length; i++) {
            box = checkboxes[i];
            box.color = "white";
        }

        clicked.push(Black.name);
        psychoJS.experiment.addData('clicked', clicked);
      Begin Routine:
        checkboxes = [Black, Hispanic, Asian, Pacific, AmericanIndian, MiddleEastern, White, Other]
        clicked = []
        mouseDown = False
        for box in checkboxes:
            box.color = "white"
      Each Frame:
        if mouse.getPressed()[0] == 0:
            mouseDown = False

        for box in checkboxes:
            if mouse.isPressedIn(box) and box.name not in clicked and not mouseDown:
                box.color = "black"
                clicked.append(box.name)
                mouseDown = True
            elif mouse.isPressedIn(box) and box.name in clicked and not mouseDown:
                box.color = "white"
                clicked.remove(box.name)
                mouseDown = True

        race_eth_data = clicked
      Each JS Frame:
        function isMouseinPolygon(polygon, mouse) {
          let inside = false;
          const vertices = polygon.vertices;

          for (let i = 0, j = vertices.length - 1; i < vertices.length; j = i++) {
            const xi = vertices[i].x;
            const yi = vertices[i].y;
            const xj = vertices[j].x;
            const yj = vertices[j].y;

            const intersect = ((yi > mouse.y) !== (yj > mouse.y)) &&
                             (mouse.x < (xj - xi) * (mouse.y - yi) / (yj - yi) + xi);

            if (intersect) {
              inside = !inside;
            }
          }

          return inside;
        }

        if (mouse.getPressed()[0] == 0) {
            mouseDown = false;
        }

        var checkboxes, clicked;
        checkboxes = [Black, Hispanic, Asian, Pacific, AmericanIndian, MiddleEastern, White, Other]

        clicked = psychoJS.experiment.extraInfo['clicked'];
        clicked = [];
        clicked.push(Black.name);

        console.log(clicked);
        for (var box, i = 0; i < checkboxes.length; i++) {
            box = checkboxes[i];

            if (isMouseinPolygon(box, mouse) && (! mouseDown)) {
                var inClicked;
                inClicked = false
                for (var box_cl, i = 0; i < clicked.length; i++) {
                    box_cl = clicked[i];
                    if (box_cl == box.name) {
                        inClicked = true;
                        break;
                    }
                }
                if (! inClicked) {
                    box.color = "black";
                    clicked.push(box.name);
                    mouseDown = true;
                }
                else if (inClicked) {
                    box.color = "white";
                    clicked.remove(box.name);
                    mouseDown = true;
                }
            }
        }

        psychoJS.experiment.addData('clicked', clicked);
    TextComponent B_AA
      letterHeight = 0.023
      pos = (-0.03, 0.3)
      startVal [time (s)] = 0.0
      text = Black or African-American
      wrapWidth = 1
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    TextComponent HLS
      letterHeight = 0.023
      pos = (0.015, 0.25)
      startVal [time (s)] = 0.0
      text = Hispanic, Latinx, or Spanish origin
      wrapWidth = 1
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    TextComponent A_AA
      letterHeight = 0.023
      pos = (-0.03, 0.2)
      startVal [time (s)] = 0.0
      text = Asian or Asian-American
      wrapWidth = 1
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    TextComponent NH_PI
      letterHeight = 0.023
      pos = (0.05, 0.15)
      startVal [time (s)] = 0.0
      text = Native Hawaiian or other Pacific Islander
      wrapWidth = 1
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    TextComponent AI_AN
      letterHeight = 0.023
      pos = (0.02, 0.1)
      startVal [time (s)] = 0.0
      text = American Indian or Alaskan Native
      wrapWidth = 1
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    TextComponent ME_NA
      letterHeight = 0.023
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Middle Eastern or North African
      wrapWidth = 1
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    TextComponent W
      letterHeight = 0.023
      pos = (-0.13, 0)
      startVal [time (s)] = 0.0
      text = White
      wrapWidth = 1
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    TextComponent Other_race_eth
      letterHeight = 0.023
      pos = (0.015, -0.05)
      startVal [time (s)] = 0.0
      text = Other (please describe by typing) 
      wrapWidth = 1
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    TextboxComponent other_race_eth_text
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.023
      placeholder = (Please describe race/ethnicity here if you chose 'Other')
      pos = (0, -0.2)
      size = (0.95, 0.2)
      startVal [time (s)] = 0
      text = (Please describe race/ethnicity here if you chose 'Other')
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  Routine race_ethn
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    CodeComponent exclude_15
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    MouseComponent confirmSign_click_13
      clickable = confirmSign_button_13
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextComponent confirmSign_button_13
      letterHeight = 0.023
      pos = (0, -0.35)
      startVal [condition] = gender_c.rating
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      text:
        Click here to confirm
        [You will not be able to go back]
    TextComponent race_Q
      letterHeight = 0.023
      pos = (0, 0.37)
      startVal [time (s)] = 0.0
      text = Which best describes your race/ethnicity?
      wrapWidth = 1
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    SliderComponent race_c
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ('Multiple or Other race/ethnicity (please describe below)', 'White', 'Middle Eastern or North African', 'American Indian or Alaskan Native', 'Native Hawaiian or other Pacific Islander', 'Asian or Asian-American', 'Hispanic, Latinx, or Spanish Origin', 'Black or African-American')
      letterHeight = 18
      pos = (-175, 125)
      size = (30, 300)
      startVal [time (s)] = 0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7, 8)
      units = pix
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    TextboxComponent other_race_text
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.023
      placeholder = (Please describe race/ethnicity here if you chose 'other')
      pos = (0, -0.2)
      size = (0.95, 0.2)
      startVal [time (s)] = 0
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    CodeComponent max_char_limit_2
      Code Type = Auto->JS
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      Each Frame:
        if len(other_race_text.text) > 500:
             other_gender_text.text = other_gender_text.text[0:500]
    CodeComponent showMouse_7
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
  Routine both_trials
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    CodeComponent exclude_4
      Code Type = Both
      Begin JS Routine:
        if (consent.rating == "I do not consent to participation or I am younger than 18 years old.") {
            continueRoutine = false;
        }
      Begin Routine:
        if consent.rating == 2:
            continueRoutine = False
    TextComponent fixation_3
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent randomize_position_2
      Code Type = Both
      Begin JS Routine:
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      Begin Routine:
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    CodeComponent position_vars_2
      Code Type = Both
      Begin JS Routine:
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      Begin Routine:
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    CodeComponent img_set
      Code Type = Both
      Begin JS Routine:
        var targetFile, FileSet_1, FileSet_2, size_conj;

        targetFile = 'resources/RV.png';
        FileSet_1 = 'resources/GV.png';
        FileSet_2 = 'resources/GV.png';
        size_conj = [25, 100];
        if (trialver === 1) {
            FileSet_1 = 'resources/RH.png';
            size_conj = [100, 25];
        }
      Begin Routine:
        targetFile = 'resources/RV.png'

        FileSet_1 = 'resources/GV.png'
        FileSet_2 = 'resources/GV.png'

        size_conj = [25, 100]

        if trialver == 'conjuction':
            FileSet_1 = 'resources/RH.png'
            size_conj = [100, 25]
    ImageComponent targetRV_2
      color = .8, .8, .8
      image [set every repeat] = $targetFile
      opacity [set every repeat] = targetopacity
      pos [set every repeat] = [0, 0]
      size = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist1img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_1
      opacity [set every repeat] = opacity_1
      pos [set every repeat] = dist1_pos
      size [set every repeat] = size_conj
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist2img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_1
      opacity [set every repeat] = opacity_2
      pos [set every repeat] = dist2_pos
      size [set every repeat] = size_conj
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist3img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_1
      opacity [set every repeat] = opacity_3
      pos [set every repeat] = dist3_pos
      size [set every repeat] = size_conj
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist4img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_2
      opacity [set every repeat] = opacity_4
      pos [set every repeat] = dist4_pos
      size [set every repeat] = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist5img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_2
      opacity [set every repeat] = opacity_5
      pos [set every repeat] = dist5_pos
      size [set every repeat] = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist6img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_2
      opacity [set every repeat] = opacity_6
      pos [set every repeat] = dist6_pos
      size [set every repeat] = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist7img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_1
      opacity [set every repeat] = opacity_7
      pos [set every repeat] = dist7_pos
      size [set every repeat] = size_conj
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist8img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_1
      opacity [set every repeat] = opacity_8
      pos [set every repeat] = dist8_pos
      size [set every repeat] = size_conj
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist9img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_1
      opacity [set every repeat] = opacity_9
      pos [set every repeat] = dist9_pos
      size [set every repeat] = size_conj
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist10img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_2
      opacity [set every repeat] = opacity_10
      pos [set every repeat] = dist10_pos
      size [set every repeat] = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist11img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_2
      opacity [set every repeat] = opacity_11
      pos [set every repeat] = dist11_pos
      size [set every repeat] = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent dist12img_2
      color = .8, .8, .8
      image [set every repeat] = $FileSet_2
      opacity [set every repeat] = opacity_12
      pos [set every repeat] = dist12_pos
      size [set every repeat] = [25, 100]
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      units = pix
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    CodeComponent replace_2
      Code Type = Both
      Begin JS Routine:
        var distractors, dists_pos, dists_pos_jit, target_present, target_opacity;

        distractors = [dist1img_2, dist2img_2, dist3img_2, dist4img_2, dist5img_2, dist6img_2, dist7img_2, dist8img_2, dist9img_2, dist10img_2, dist11img_2, dist12img_2];
        dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos, O_dist7_pos, O_dist8_pos, O_dist9_pos, O_dist10_pos, O_dist11_pos, O_dist12_pos];
        dists_pos_jit = [dist1_pos, dist2_pos, dist3_pos, dist4_pos, dist5_pos, dist6_pos, dist7_pos, dist8_pos, dist9_pos, dist10_pos, dist11_pos, dist12_pos];
        if (setSize == 6) {
            distractors = [dist1img_2, dist2img_2, dist3img_2, dist4img_2, dist5img_2, dist6img_2];
            dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos];
            dists_pos_jit = [dist1_pos, dist2_pos, dist3_pos, dist4_pos, dist5_pos, dist6_pos];
        }

        target_opacity = targetopacity;
        target_present = false;
        if (target_opacity == 1) {
            target_present = true;
        }

        if (target_present) {
            for (let i = 0; i < dists_pos.length; i++) {
                if (dists_pos[i][0] == O_target_pos[0] && dists_pos[i][1] == O_target_pos[1]) {
                    distractors[i].setOpacity(0.0);
                    targetRV_2.setPos(dists_pos_jit[i]);
                    break;
                }
            }
        }
      Begin Routine:
        # Remove the distractor for trials where target is present
        distractors = [dist1img_2, dist2img_2, dist3img_2, dist4img_2, dist5img_2, dist6img_2, dist7img_2, dist8img_2, dist9img_2, dist10img_2, dist11img_2, dist12img_2]
        dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos, O_dist7_pos, O_dist8_pos, O_dist9_pos, O_dist10_pos, O_dist11_pos, O_dist12_pos]

        if setSize == 6:
            distractors = [dist1img_2, dist2img_2, dist3img_2, dist4img_2, dist5img_2, dist6img_2]
            dists_pos = [O_dist1_pos, O_dist2_pos, O_dist3_pos, O_dist4_pos, O_dist5_pos, O_dist6_pos]

        target_opacity = targetopacity
        target_present = (target_opacity == 1)

        # Only for trials where the target is present is one distractor removed.
        if target_present:
            for idx in range(len(dists_pos)):
                if dists_pos[idx] == O_target_pos:
                    distractors[idx].opacity = 0
                    targetRV_2.pos = distractors[idx].pos
                    break
    KeyboardComponent Response_2
      allowedKeys = 'p','a'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine consentForm_1
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    CodeComponent imports_3
      Code Type = Both
      Before Experiment:
        import random
    CodeComponent showMouse
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
    TextComponent Consent_Form
      color = 1,1,1
      letterHeight = 0.023
      pos = (0, 0.05)
      startVal [time (s)] = 0
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      text [set every repeat]:
        Hamilton College
        Psychology Department
        198 College Hill Rd.
        Clinton, NY 13323

        Participant Consent Form: Cognitive Fluctuations

        Purpose:
        The purpose of this study is to examine how cognitive performance fluctuates for different people, at different times, while doing different tasks. This study is part of Prof. Alexandra List’s research.

        Procedure:
        If you agree to be in this study, you will be asked to view simple images on a computer screen and respond with specific button presses. You will be asked to respond quickly and accurately. You will also be asked to answer a series of questions about when you prefer to be awake and performing various tasks, in addition to providing basic demographic information (i.e., age, gender, race/ethnicity).

        The total time required to complete the study should be under 15 minutes. If you complete the study, you will receive \$2.50 for participating in the study.

        Benefits/Risks to Participant:
        Participants will learn about the empirical methodologies of and will help contribute to the body of knowledge in Psychology. Risks include any boredom you may feel while answering the questions. Breaks can be taken as needed.
    TextComponent forward
      letterHeight = 0.023
      pos = (0, -0.4)
      startVal [time (s)] = 3
      text [set every repeat] = Click here to continue
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    MouseComponent click
      clickable = forward
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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  Routine consentForm_2
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    CodeComponent showMouse_8
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible = True
    TextComponent Consent_Form_2
      color = 1,1,1
      letterHeight = 0.023
      pos = (0, 0.15)
      startVal [time (s)] = 0
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      text [set every repeat]:
        Voluntary Nature of the Study/Confidentiality:
        Your participation in this study is entirely voluntary and you may refuse to complete the study at any point during the experiment, or refuse to answer or skip any questions with which you are uncomfortable. You may also stop at any time. Your name will never be connected to your results or to your responses; instead, a number will be used for data identification purposes. Information that would make it possible to identify you or any other participant will never be included in any sort of report. The data will be accessible only to those working on the project.

        Contacts and Questions:
        If you have questions, you may contact Dr. Alexandra List at 315-859-4308 or scct3045@hamilton.edu. Questions or concerns about institutional approval should be directed to Dr. Rachel White, Chair of the Institutional Review Board for Human Subjects, 315-859-4518 or iboard@hamilton.edu.

        I have been provided a link to Hamilton’s Privacy Notice (https://www.hamilton.edu/privacy) and have read and understood it. I consent to the processing of my personal data and special categories of personal data in accordance with the Privacy Notice and for the purposes of applying to and participating in Hamilton College research studies.
    TextComponent SaC
      letterHeight = 0.023
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Statement of Consent:
        I have read the above information. Select one of the two following options:
    SliderComponent consent
      color = Black
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ("I consent to participation and am 18 years or older.", "I do not consent to participation or I am younger than 18 years old.")
      letterHeight = 20
      pos = (-250, -280)
      size = (30, 60)
      startVal [time (s)] = 0
      styles = choice
      ticks = (1, 2)
      units = pix
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    TextComponent forward_2
      letterHeight = 0.023
      pos = (0, -0.4)
      startVal [condition] = consent.rating
      text [set every repeat] = Click here to continue
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    MouseComponent click_2
      clickable = forward_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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Flow
  Routine consentForm_1
  Routine consentForm_2
  Routine exclusion
  Routine instructColor
  LoopInitiator loop10_colorblind loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine RG_colorblind
  LoopTerminator loop10_colorblind
  Routine instructTrial
  LoopInitiator exp_loop loopType="TrialHandler"
    conditionsFile = resources/experimentType.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialver': 'feature'},
      {'trialver': 'conjuction'}]
    LoopInitiator prac loopType="TrialHandler"
      conditionsFile = resources/pracConditions_4.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'setSize': 6, 'targetPresence': 'present', 'targetPos_X': 150, 'targetPos_Y': 0, 'correctAnswer': 'p', 'targetopacity': 1, 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 0, 'opacity_8': 0, 'opacity_9': 0, 'opacity_10': 0, 'opacity_11': 0, 'opacity_12': 0},
        {'setSize': 18, 'targetPresence': 'present', 'targetPos_X': -450, 'targetPos_Y': -300, 'correctAnswer': 'p', 'targetopacity': 1, 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 1, 'opacity_8': 1, 'opacity_9': 1, 'opacity_10': 1, 'opacity_11': 1, 'opacity_12': 1},
        {'setSize': 18, 'targetPresence': 'absent', 'targetPos_X': 0, 'targetPos_Y': 0, 'correctAnswer': 'a', 'targetopacity': 0, 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 1, 'opacity_8': 1, 'opacity_9': 1, 'opacity_10': 1, 'opacity_11': 1, 'opacity_12': 1},
        {'setSize': 6, 'targetPresence': 'absent', 'targetPos_X': 0, 'targetPos_Y': 0, 'correctAnswer': 'a', 'targetopacity': 0, 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 0, 'opacity_8': 0, 'opacity_9': 0, 'opacity_10': 0, 'opacity_11': 0, 'opacity_12': 0}]
      Routine both_trials
      Routine feedback
    LoopTerminator prac
    LoopInitiator trial_48 loopType="TrialHandler"
      conditionsFile = resources/trialConditions_48.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'setSize': 18, 'targetPresence': 'present', 'targetPos_X': -450, 'targetPos_Y': -300, 'correctAnswer': 'p', 'targetopacity': 1, 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 1, 'opacity_8': 1, 'opacity_9': 1, 'opacity_10': 1, 'opacity_11': 1, 'opacity_12': 1},
        {'setSize': 18, 'targetPresence': 'present', 'targetPos_X': -150, 'targetPos_Y': -300, 'correctAnswer': 'p', 'targetopacity': 1, 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 1, 'opacity_8': 1, 'opacity_9': 1, 'opacity_10': 1, 'opacity_11': 1, 'opacity_12': 1},
        {'setSize': 18, 'targetPresence': 'present', 'targetPos_X': 150, 'targetPos_Y': -300, 'correctAnswer': 'p', 'targetopacity': 1, 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 1, 'opacity_8': 1, 'opacity_9': 1, 'opacity_10': 1, 'opacity_11': 1, 'opacity_12': 1},
        {'setSize': 18, 'targetPresence': 'present', 'targetPos_X': 450, 'targetPos_Y': -300, 'correctAnswer': 'p', 'targetopacity': 1, 'opacity_1': 1, 'opacity_2': 1, 'opacity_3': 1, 'opacity_4': 1, 'opacity_5': 1, 'opacity_6': 1, 'opacity_7': 1, 'opacity_8': 1, 'opacity_9': 1, 'opacity_10': 1, 'opacity_11': 1, 'opacity_12': 1}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
      Routine both_trials
      Routine feedback
    LoopTerminator trial_48
    Routine Rest
  LoopTerminator exp_loop
  Routine PreMEQ
  Routine bestfeel_meq
  Routine wokentired_meq
  Routine sleepytime_meq
  Routine bestpeak_meq
  Routine persontype_meq
  Routine what_age
  Routine gender
  Routine race_ethn
  Routine Thanks
